PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TEST
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine StudyTrial
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $encoding_question
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    ImageComponent studyImage
      image [set every repeat] = $image_filename
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrial
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    ImageComponent leftImg
      image [set every repeat] = $left_image
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent rightImg
      image [set every repeat] = $right_image
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadFiles
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        csv_filename = f"sequence_{block_num}.csv"
        test_file = f"sequence_{block_num}_test.csv"
  Routine block_num
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine Distractor
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # Generate random numbers
        current_number = random.randint(1, 99)
      Each Frame:
        # Run for xx seconds
        if globalClock.getTime() - distractor_start_time > 10:
            continueRoutine = False
    TextComponent numberText
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_number
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractor_start
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        distractor_start_time = globalClock.getTime()
  Routine block_counter
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
  Routine welcome
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        welcome_message = "Welcome to Block " + str(block_num) + "\n\nPress SPACE to begin."
    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $welcome_message
    KeyboardComponent welcomeResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue
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  Routine block_end
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        block_num += 1
    TextComponent blockendText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = The next block will begin shortly. Please wait. 
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  Routine Intro
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    TextComponent IntroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will complete a series of mini-experiments called Blocks.

        Each Block will consist of 3 phases:

        (1) Learning phase
        (2) Odd/even phase
        (3) Test phase



        Press SPACEBAR to continue
    KeyboardComponent IntroResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LearningQuestion
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    TextComponent LearningQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent LearningQuestionResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DistractorInst
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    TextComponent DistractorInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN TASK



        You will be shown a series of numbers 1 at a time.

        Your task is to use the keyboard to indicate if you think the presented number is an ODD or EVEN number.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACEBAR for an example
    KeyboardComponent DistractorInstResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LearningInst
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    TextComponent LearningInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        In this task, you will see a series of images presented one at a time.

        Your task will be to remember the order in which you saw the images.



        Press SPACEBAR for an example
    KeyboardComponent LearningInstResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DistractorQuestion
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    TextComponent DistractorQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ODD/EVEN PHASE


        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent DistractorQuestionResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hello
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    TextComponent helleText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!





        Press SPACEBAR for instructions
    KeyboardComponent helloResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInst
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    TextComponent TestInstText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST PHASE



        You will be presented with 2 images.

        Your task will be to indicate which image you remember seeing first during the learning phase.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACE for an example
    KeyboardComponent TestInstResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestExample
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    ImageComponent TestExampleLeftImage
      image = rubberduck.jpg
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent TestExampleRightImage
      image = strawberry.jpg
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent TestExampleResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent TestExampleOptions
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow                             right arrow 
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  Routine LearningExample1
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    ImageComponent LearningExample1Image
      image = strawberry.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent LearningEncodingQuestion1Text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Does this item have a distinctive odor?
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    TextComponent LearningEncodingOptions1Text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: yes                    right arrow: no
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    KeyboardComponent LearningEncodingExample1Resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine LearningExample2
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    ImageComponent LearningExample2Image
      image = rubberduck.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent LearningEncodingQuestion2Text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Does this item grow on trees?
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    TextComponent LearningEncodingOptions2Text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 1: yes                                       2: no 
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    KeyboardComponent LearningEncodingExample2Resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine TestQuestion
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    TextComponent TestQuestionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEST PHASE


        Do you have any questions about this phase of the experiment?



        Press SPACEBAR to continue
    KeyboardComponent TestQuestionResp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyReminder
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    TextComponent StudyReminderText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        Your task is to:

        (1) remember the order in which you see the images

        (2) use the keyboard to answer the question about the image



        Press 1 to begin
  Routine LearningInst2
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    TextComponent LearningInst2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LEARNING PHASE



        You will also be asked to use the keyboard to answer a question related to the images. This question may be different each time.

        You will have 2.5 seconds to make your response before the screen advances.



        Press SPACEBAR to continue
  Routine DistractorExample1
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    TextComponent DistractorExample1Number
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 3
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    TextComponent DistractorExample1OptionsText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: odd                  right arrow: even
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    KeyboardComponent DistractorExample1Resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine DistractorExample2
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    TextComponent DistractorExample2Number
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = 34
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    TextComponent DistractorExample2OptionsText
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = left arrow: odd                  right arrow: even
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    KeyboardComponent DistractorExample2Resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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Flow
  Routine block_counter
  Routine hello
  Routine Intro
  Routine LearningInst
  Routine LearningInst2
  Routine LearningExample1
  Routine LearningExample2
  Routine LearningQuestion
  Routine DistractorInst
  Routine DistractorExample1
  Routine DistractorExample2
  Routine DistractorQuestion
  Routine TestInst
  Routine TestExample
  Routine TestQuestion
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = blocks_V1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('csv_filename', 'sequence_1.csv'), ('test_file', 'sequence_1_test.csv')]),
      OrderedDict([('block', 2), ('csv_filename', 'sequence_2.csv'), ('test_file', 'sequence_2_test.csv')]),
      OrderedDict([('block', 6), ('csv_filename', 'sequence_f.csv'), ('test_file', 'sequence_f_test.csv')]),
      OrderedDict([('block', 7), ('csv_filename', 'sequence_g.csv'), ('test_file', 'sequence_g_test.csv')])]
    Routine welcome
    Routine StudyReminder
    LoopInitiator StudyLoop loopType="TrialHandler"
      conditionsFile = $csv_filename
      loopType = sequential
      nReps = 1
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      Routine StudyTrial
    LoopTerminator StudyLoop
    Routine distractor_start
    LoopInitiator DistractorLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine Distractor
    LoopTerminator DistractorLoop
    LoopInitiator TestLoop loopType="TrialHandler"
      conditionsFile = $test_file
      loopType = sequential
      nReps = 1
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      Routine TestTrial
    LoopTerminator TestLoop
    Routine block_end
  LoopTerminator BlockLoop
